PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[.8,.8,.8]
  expName = mf_amp
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Routines
  Routine trial_2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $category
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
  Routine break_3
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Moving on...
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  Routine AMP_non_word
  Routine AMP_nonword
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $nonwords
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    KeyboardComponent resp_1
      allowedKeys = 'left','right',"escape","n"
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 3.25
      text [set every repeat] = $masks
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  Routine AMP_word
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
      text [set every repeat] = $words
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = .125
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd

        words = pd.read_csv("words4exp.csv")

        full_list = list(range(0,341))
        care_virtue = list(range(0,12))
        care_vice = list(range(12,24))
        fair_virtue = list(range(24,36))
        fair_vice = list(range(36,48))
        loyal_virtue = list(range(48,60))
        loyal_vice = list(range(60,72))
        auth_virtue = list(range(72,84))
        auth_vice = list(range(84,96))
        sanc_virtue = list(range(96,108))
        sanc_vice = list(range(108,120))
        neutral = list(range(120,170))
        nonword = list(range(170,340))
        control = [340,341]

        care_virtue_amp = random.sample(care_virtue, 7)
        care_vice_amp = random.sample(care_vice, 7)
        fair_virtue_amp = random.sample(fair_virtue, 7)
        fair_vice_amp = random.sample(fair_vice, 7)
        loyal_virtue_amp = random.sample(loyal_virtue, 7)
        loyal_vice_amp = random.sample(loyal_vice, 7)
        auth_virtue_amp = random.sample(auth_virtue, 7)
        auth_vice_amp = random.sample(auth_vice, 7)
        sanc_virtue_amp = random.sample(sanc_virtue, 7)
        sanc_vice_amp = random.sample(sanc_vice, 7)
        nonword_amp = random.sample(nonword, 72)
        control_amp = control

        AMP_words = care_virtue_amp + care_vice_amp + fair_virtue_amp + fair_vice_amp + loyal_virtue_amp + loyal_vice_amp + auth_virtue_amp + auth_vice_amp + sanc_virtue_amp + sanc_vice_amp + control_amp

        AMP_wordlist = words.loc[AMP_words].word.values
        AMP_masklist = words.loc[nonword_amp].masks.values
        AMP_nonwordlist = words.loc[nonword_amp].word.values
        AMP_corr_ans = words.loc[AMP_words].correct_amp.values

        df1 = pd.DataFrame(
            {'words': AMP_wordlist.tolist(),
             'corr_ans': AMP_corr_ans.tolist()
            })

        df2 = pd.DataFrame(
             {'nonwords': AMP_nonwordlist.tolist(),
             'masks': AMP_masklist.tolist(),
            })


        df1 = df1.sample(frac=1).reset_index(drop=True)
        df2 = df2.sample(frac=1).reset_index(drop=True)

        df_full = pd.concat([df1,df2], axis = 1)

        df_full.to_csv("AMP_conditions.csv")
      End Experiment:
        os.remove("AMP_conditions.csv")
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AMP_conditions.csv
    loopType = random
    nReps = 1
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    Routine AMP_word
    Routine AMP_nonword
  LoopTerminator trials
